<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Harp.SoundCard;assembly=Harp.SoundCard"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p2="clr-namespace:Harp.AnalogInput;assembly=Harp.AnalogInput"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>DataAcquisition</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="Format">
              <Format>../output/latency/{0:HHmmss}/</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Suffix</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SoundCardMessages</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:GroupByRegister" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Suffix</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>soundcard/SoundCard.bin</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:MessageWriter">
                <harp:FileName>../output/latency/175959/soundcard/SoundCard.bin</harp:FileName>
                <harp:Suffix>None</harp:Suffix>
                <harp:Buffered>true</harp:Buffered>
                <harp:Overwrite>false</harp:Overwrite>
                <harp:FilterType>Include</harp:FilterType>
                <harp:MessageType xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Suffix</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:GetDeviceMetadata" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Suffix</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>soundcard/device.yml</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:WriteAllText">
                <io:Path>../output/latency/175959/soundcard/device.yml</io:Path>
                <io:Overwrite>false</io:Overwrite>
                <io:Append>false</io:Append>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Suffix</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>AnalogInputMessages</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:GroupByRegister" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Suffix</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>analoginput/AnalogInput.bin</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:MessageWriter">
                <harp:FileName>../output/latency/175959/analoginput/AnalogInput.bin</harp:FileName>
                <harp:Suffix>None</harp:Suffix>
                <harp:Buffered>true</harp:Buffered>
                <harp:Overwrite>false</harp:Overwrite>
                <harp:FilterType>Include</harp:FilterType>
                <harp:MessageType xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Suffix</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:GetMetadata" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Suffix</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>analoginput/device.yml</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:WriteAllText">
                <io:Path>../output/latency/175959/analoginput/device.yml</io:Path>
                <io:Overwrite>false</io:Overwrite>
                <io:Append>false</io:Append>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Suffix</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="13" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="15" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="16" To="22" Label="Source1" />
            <Edge From="17" To="19" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source2" />
            <Edge From="22" To="24" Label="Source1" />
            <Edge From="23" To="24" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="32" Label="Source1" />
            <Edge From="27" To="29" Label="Source1" />
            <Edge From="28" To="29" Label="Source2" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source2" />
            <Edge From="32" To="34" Label="Source1" />
            <Edge From="33" To="34" Label="Source2" />
            <Edge From="35" To="41" Label="Source1" />
            <Edge From="36" To="38" Label="Source1" />
            <Edge From="37" To="38" Label="Source2" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="40" To="41" Label="Source2" />
            <Edge From="41" To="43" Label="Source1" />
            <Edge From="42" To="43" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SoundCard</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>SoundCardCommands</rx:Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM5</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>SoundCardMessages</Name>
            </Expression>
            <Expression xsi:type="p1:Parse">
              <harp:Register xsi:type="p1:InputState" />
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateConfigureDI0Payload">
                <p1:ConfigureDI0>StartSound</p1:ConfigureDI0>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateSoundIndexDI0Payload">
                <p1:SoundIndexDI0>3</p1:SoundIndexDI0>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateAttenuationLeftDI0Payload">
                <p1:AttenuationLeftDI0>0</p1:AttenuationLeftDI0>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateAttenuationRightDI0Payload">
                <p1:AttenuationRightDI0>0</p1:AttenuationRightDI0>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateConfigureDO1Payload">
                <p1:ConfigureDO1>Pulse</p1:ConfigureDO1>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreatePulseDO1Payload">
                <p1:PulseDO1>100</p1:PulseDO1>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>A</wie:Filter>
                <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateOutputSetPayload">
                <p1:OutputSet>DO1</p1:OutputSet>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SoundCardCommands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SoundCardMessages</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="13" Label="Source1" />
            <Edge From="6" To="13" Label="Source2" />
            <Edge From="7" To="13" Label="Source3" />
            <Edge From="8" To="13" Label="Source4" />
            <Edge From="9" To="13" Label="Source5" />
            <Edge From="10" To="13" Label="Source6" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source7" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="16" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>AnalogInput</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>AnalogInputCommands</rx:Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM14</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>AnalogInputMessages</Name>
            </Expression>
            <Expression xsi:type="p2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p2:CreateAcquisitionStatePayload">
                <p2:AcquisitionState>Enabled</p2:AcquisitionState>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>AnalogInputCommands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>AnalogInputMessages</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>