<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Harp.SoundCard;assembly=Harp.SoundCard"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>DataAcquisition</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="Format">
              <Format>../output/playsound/{0:HHmmss}/</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Suffix</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Device Events</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:GroupByRegister" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Suffix</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>SoundCard.bin</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:MessageWriter">
                <harp:Suffix>None</harp:Suffix>
                <harp:Buffered>true</harp:Buffered>
                <harp:Overwrite>false</harp:Overwrite>
                <harp:FilterType>Include</harp:FilterType>
                <harp:MessageType xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Suffix</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:GetDeviceMetadata" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Suffix</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>device.yml</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:WriteAllText">
                <io:Overwrite>false</io:Overwrite>
                <io:Append>false</io:Append>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Suffix</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="13" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="15" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="16" To="22" Label="Source1" />
            <Edge From="17" To="19" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source2" />
            <Edge From="22" To="24" Label="Source1" />
            <Edge From="23" To="24" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>Device Commands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM4</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Device Events</Name>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateAttenuationLeftPayload">
          <p1:AttenuationLeft>10</p1:AttenuationLeft>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateAttenuationRightPayload">
          <p1:AttenuationRight>50</p1:AttenuationRight>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreatePlaySoundOrFrequencyPayload">
          <p1:PlaySoundOrFrequency>2</p1:PlaySoundOrFrequency>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Device Commands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Device Events</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="8" Label="Source1" />
      <Edge From="5" To="8" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source3" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>